PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Window size (pixels) = [1536, 864]
  expName = posner
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Routines
  Routine trial
    TextComponent fixation_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent fixation_2
      letterHeight = 0.1
      startVal [time (s)] = 1.2
      stopVal [time (s)] = 2.7
      text = +
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    ImageComponent cue
      image = images/arrow-left.png
      ori [set every repeat] = cueOri
      size = (0.1, 0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.7
      units = height
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    ImageComponent target
      image = images/circle_red.png
      pos [set every repeat] = [targetX, 0]
      size = (0.15, 0.15)
      startVal [time (s)] = 1.7
      stopVal [duration (s)] = 0.5
      units = height
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    KeyboardComponent correct_key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.7
      stopVal [duration (s)] = 1
      store = first key
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        background_sound= sound.Sound('sounds/silence.wav')
      Begin Routine:
        if posner_task.thisN == 0:
            background_sound.play()
      End Routine:
        if posner_task.thisN == 7:
            background_sound.stop()
    KeyboardComponent early_resp
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 1.7
      store = first key
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  Routine break_2
    TextComponent break_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Please take a minute break
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  Routine exp_instructions
Flow
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator posner_task loopType="TrialHandler"
      conditionsFile = conditions.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('targetX', -0.5), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
        OrderedDict([('targetX', 0.5), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
        OrderedDict([('targetX', -0.5), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
        OrderedDict([('targetX', 0.5), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
        OrderedDict([('targetX', -0.5), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
        OrderedDict([('targetX', 0.5), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
        OrderedDict([('targetX', -0.5), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
        OrderedDict([('targetX', 0.5), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
        OrderedDict([('targetX', -0.5), ('cueOri', 180), ('congr', 0), ('corrAns', 'left')]),
        OrderedDict([('targetX', 0.5), ('cueOri', 0), ('congr', 0), ('corrAns', 'right')])]
      Routine trial
    LoopTerminator posner_task
    Routine break_2
  LoopTerminator block
